---
API: 2.1
OpenSesame: 3.3.12
Platform: nt
---
set width 1600
set uniform_coordinates yes
set title "PercAct Experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set psychopy_waitblanking yes
set mouse_backend xpyriment
set keyboard_backend legacy
set height 900
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set expyriment_opengl yes
set experiment_path "C:\\Users\\niels\\Desktop\\PerAct_Exam"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background white

define inline_script AgeGenderForm
	set description "Executes Python code"
	___run__
	def my_form_validator():
	    """Checks whether both gender the gender and age fields have been                   filled"""
	    return var.gender !='no' and var.age != u''
	
	def filter_digits(ch):
	
	    """Allows only digit characters as input"""
	
	    return ch in ['0','1','2','3','4','5','6','7','8','9','backspace']
	
	# Define all widgets
	button_ok = Button(text = u'OK')
	label_gender = Label(u'Your gender:')
	checkbox_male = Checkbox(text = u'Male', group = u'gender', var = u'gender')    
	checkbox_female = Checkbox(text = u'Female', group = u'gender', var = u'gender')    
	checkbox_other = Checkbox(text = u'Other', group = u'gender', var = u'gender')
	label_age = Label(u'Your age:')
	# only allow digits as age input
	input_age = TextInput(stub = u'Age here ...', var = 'age', key_filter = filter_digits)
	# Build the form. Specify a validator function to make sure that the form is
	# completed.
	my_form = Form(validator=my_form_validator, cols=4, rows=6, spacing=10, margins=(100, 100, 100, 100),  )
	my_form.set_widget(label_gender, (0, 0))
	my_form.set_widget(checkbox_male, (1, 0))
	my_form.set_widget(checkbox_female, (2, 0))
	my_form.set_widget(checkbox_other, (3, 0))
	my_form.set_widget(label_age, (0, 1))
	my_form.set_widget(input_age, (1, 1))
	my_form.set_widget(button_ok, (1, 2))
	my_form._exec()
	__end__
	set _prepare ""

define form_consent ConsentForm
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Consent form"
	__form_text__
	You are about to participate in an experiment.
	
	If you agree to participate, please be aware that you are free to withdraw at any point throughout the duration of the experiment. Your participation is solicited, yet strictly voluntary.  All information will be kept confidential and your name will not be associated with any research findings. 
	
	Upon completion of your participation in this study you will be provided with a brief explanation of the question this study addresses.
	
	You can stop at any time during experiment if you feel uncomfortable by clicking on the escape botton.
	
	Indicate below whether you have read and understod the terms:
	__end__
	set description "A simple consent form"
	set decline_text "Do not participate"
	set decline_message "You need to accept the consent form to participate!"
	set cols "2;2"
	set checkbox_text "I have read and understood the information shown above"
	set accept_text "Participate!"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define sketchpad Introduction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="You will be presented with a shape in the bottom of the screen.<br /><br />You have to click on the figure either to the right or left that you feel best matches it as fast as possible.<br /><br />Easy right?<br /><br /><br />Press any key to begin!" x=0 y=0 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color="#000000" fill=1 penwidth=1 show_if=always x1=-288 x2=-416 y1=-416 y2=-352 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color="#000000" fill=1 penwidth=1 show_if=always x1=320 x2=416 y1=-416 y2=-352 z_index=0
	draw image center=1 file="triangle_3_comp.png" scale=0.6 show_if=always x=0 y=288 z_index=0
	draw image center=1 file="triangle_4_comp.png" scale=0.6 show_if=always x=-608 y=-288 z_index=0
	draw image center=1 file="square_3_comp.png" scale=0.6 show_if=always x=608 y=-288 z_index=0
	draw textline center=1 color="#e40000" font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Reference Shape" x=416 y=192 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color="#e40000" fill=1 penwidth=1 show_if=always x1=288 x2=192 y1=224 y2=288 z_index=0
	draw rect color="#e40000" fill=0 h=256 penwidth=3 show_if=always w=256 x=-128 y=160 z_index=0

define sketchpad Stimulus
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[left_stimuli]" scale=0.67 show_if=always x=-608 y=-256 z_index=0
	draw image center=1 file="[right_stimuli]" scale=0.67 show_if=always x=608 y=-256 z_index=0
	draw image center=1 file="[ref_stimuli]" scale=0.67 show_if=always x=0 y=256 z_index=0
	draw rect color="#ffffff" fill=0 h=256 name=left penwidth=2 show_if=always w=256 x=-736 y=-384 z_index=0
	draw rect color="#ffffff" fill=0 h=256 name=right penwidth=2 show_if=always w=256 x=480 y=-384 z_index=0

define form_multiple_choice arousal
	set timeout infinite
	set spacing 10
	__question__
	__end__
	__options__
	1
	2
	3
	4
	5
	6
	7
	8
	9
	10
	__end__
	set margins "50;50;50;50"
	set form_var arousal
	set form_title "How energized do you feel today on a scale from 1-10? 10 is extremely energized, whereas 1 is demotivated"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sketchpad emotionIntro
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=27 html=yes show_if=always text="The experiment is now completed!<br /><br />You will now be presented with a small questionaire. Remember the information you give is anonymized!<br /><br />Press any key to continue<br /><br />" x=0 y=-32 z_index=0

define sequence emotion_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run arousal always
	run valence always
	run logger always

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="The experiment is done. Thanks for participating!<br /><br />Press any key to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run ConsentForm no
	run AgeGenderForm always
	run Introduction always
	run experimentsequence always

define loop experimentloop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 ref_stimuli "triangle_3_comp.png"
	setcycle 0 right_stimuli "square_3_comp.png"
	setcycle 0 left_stimuli "triangle_4_comp.png"
	setcycle 0 level_of_stim 1
	setcycle 1 ref_stimuli "triangle_4_comp.png"
	setcycle 1 right_stimuli "square_4_comp.png"
	setcycle 1 left_stimuli "triangle_3_comp.png"
	setcycle 1 level_of_stim 1
	setcycle 2 ref_stimuli "square_3_comp.png"
	setcycle 2 right_stimuli "square_4_comp.png"
	setcycle 2 left_stimuli "triangle_3_comp.png"
	setcycle 2 level_of_stim 1
	setcycle 3 ref_stimuli "square_4_comp.png"
	setcycle 3 right_stimuli "square_3_comp.png"
	setcycle 3 left_stimuli "triangle_4_comp.png"
	setcycle 3 level_of_stim 1
	setcycle 4 ref_stimuli "triangle_10_comp.png"
	setcycle 4 right_stimuli "square_10_comp.png"
	setcycle 4 left_stimuli "triangle_9_comp.png"
	setcycle 4 level_of_stim 2
	setcycle 5 ref_stimuli "triangle_9_comp.png"
	setcycle 5 right_stimuli "square_9_comp.png"
	setcycle 5 left_stimuli "triangle_10_comp.png"
	setcycle 5 level_of_stim 2
	setcycle 6 ref_stimuli "square_10_comp.png"
	setcycle 6 right_stimuli "square_9_comp.png"
	setcycle 6 left_stimuli "triangle_10_comp.png"
	setcycle 6 level_of_stim 2
	setcycle 7 ref_stimuli "square_9_comp.png"
	setcycle 7 right_stimuli "square_10_comp.png"
	setcycle 7 left_stimuli "triangle_9_comp.png"
	setcycle 7 level_of_stim 2
	setcycle 8 ref_stimuli "triangle_15_comp.png"
	setcycle 8 right_stimuli "square_15_comp.png"
	setcycle 8 left_stimuli "triangle_16_comp.png"
	setcycle 8 level_of_stim 3
	setcycle 9 ref_stimuli "triangle_16_comp.png"
	setcycle 9 right_stimuli "square_16_comp.png"
	setcycle 9 left_stimuli "triangle_15_comp.png"
	setcycle 9 level_of_stim 3
	setcycle 10 ref_stimuli "square_16_comp.png"
	setcycle 10 right_stimuli "square_15_comp.png"
	setcycle 10 left_stimuli "triangle_16_comp.png"
	setcycle 10 level_of_stim 3
	setcycle 11 ref_stimuli "square_15_comp.png"
	setcycle 11 right_stimuli "square_16_comp.png"
	setcycle 11 left_stimuli "triangle_15_comp.png"
	setcycle 11 level_of_stim 3
	run trial

define sequence experimentsequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run experimentloop always
	run emotionIntro always
	run emotion_sequence always
	run end_of_experiment always

define sketchpad fixdot
	set start_response_interval no
	set duration 750
	set description "A fixation dot"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log no
	log age
	log count_mouse_tracker
	log count_logger
	log datetime
	log gender
	log initiation_time_mouse_tracker
	log left_stimuli
	log right_stimuli
	log ref_stimuli
	log level_of_stim
	log response
	log response_mouse_tracker
	log response_time_mouse_tracker
	log time_trial
	log timestamps_mouse_tracker
	log ypos_mouse_tracker
	log xpos_mouse_tracker
	log arousal
	log valence
	log time_logger

define mousetrap_response mouse_tracker
	__warning_message__
	draw textline text="Please start moving" x=0 y=0
	__end__
	set update_feedback no
	set timeout infinite
	set start_coordinates "0;335"
	set skip_item no
	set sketchpad Stimulus
	set save_trajectories yes
	set reset_mouse yes
	set number_of_buttons 2
	set mouse_buttons_allowed "left_button;right_button"
	set max_initiation_time 1000
	set logging_resolution 10
	set description "Tracks mouse movements"
	set correct_button ""
	set click_required yes
	set check_initiation_time no
	set button4 ""
	set button3 ""
	set button2 right
	set button1 left
	set boundaries "upper=no lower=no left=no right=no"

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixdot always
	run Stimulus always
	run mouse_tracker always
	run logger always

define form_multiple_choice valence
	set timeout infinite
	set spacing 10
	__question__
	__end__
	__options__
	1
	2
	3
	4
	5
	6
	7
	8
	9
	10
	__end__
	set margins "50;50;50;50"
	set form_var valence
	set form_title "Rate your emotional state today on a scale from 1-10. 1 is very negative, whereas 10 is very positive"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

